PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1680, 1050]
  Full-screen window = True
  Experiment info = {u'Eye Tracker': u'', u'session': u'001', u'participant': u''}
  expName = etDemo
  Units = pix
  Screen = 1
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Routines
  Routine pre
    TextComponent fix
      color = black
      text = +
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 40
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  Routine trial
    CodeComponent code
      Begin Experiment:
        import random
        import os
        import shutil

        possibleLocations = [(-300,0), (300,0), (0,300), (0,-300), (-300,-300),(0,0), (-300,300), (300,300), (300,-300)]
        conditions = ['redDot','blackDot']


        try:
            os.remove('events.hdf5')
        except OSError:
            pass

        if expInfo['Eye Tracker']:
            try:
                from psychopy.iohub import EventConstants,ioHubConnection,load,Loader
                from psychopy.iohub.util import NumPyRingBuffer
                from psychopy.data import getDateStr

                # Load the specified iohub configuration file converting it to a python dict.
                io_config=load(file('tobii_std.yaml','r'), Loader=Loader)

                # Add / Update the session code to be unique. Here we use the psychopy getDateStr() function for session code generation
                session_info=io_config.get('data_store').get('session_info')
                session_info.update(code="S_%s"%(getDateStr()))

                # Create an ioHubConnection instance, which starts the ioHubProcess, and informs it of the requested devices and their configurations.
                io=ioHubConnection(io_config)

                iokeyboard=io.devices.keyboard
                mouse=io.devices.mouse
                if io.getDevice('tracker'):
                    eyetracker=io.getDevice('tracker')

                    win.winHandle.minimize()
                    eyetracker.runSetupProcedure()
                    win.winHandle.activate()
                    win.winHandle.maximize()
                    win.flip()

                ## Send some info about the experiment to the IOHUB
                io.sendMessageEvent(text="%s"%(expInfo['expName']))
                io.sendMessageEvent(text="DATE: %s"%(expInfo['date']))
                io.sendMessageEvent(text="SSID: %s"%(expInfo['participant']))


            except Exception, e:
               import sys
               print "!! Error starting ioHub: ",e," Exiting..."
               sys.exit(1)
      Begin Routine:
        d1pos, d2pos = random.sample(possibleLocations, 2)
        trialCond = random.sample(conditions,1)[0]

        if trialCond == 'redDot':
            dotColour = 'red'
        else:
            dotColour = 'black'


        if expInfo['Eye Tracker']:
            io.clearEvents('all')
            eyetracker.setRecordingState(True)
            io.sendMessageEvent(text="tStart %i" %(trials.thisN))
      End Routine:
        if expInfo['Eye Tracker']:
            eyetracker.setRecordingState(False)
            io.sendMessageEvent(text="tEnd %i" %(trials.thisN))

        # Add to expdata
        trials.addData('dot1Location', d1pos)
        trials.addData('dot2Location', d2pos)
        trials.addData('Condition', dotColour)
      End Experiment:
        if expInfo['Eye Tracker']:
            eyetracker.setConnectionState(False)
            io.sendMessageEvent(text="EXPERIMENT FINISHED")
            io.quit()

            ## Save hdf5 file as a new file
            oldnhdf5 = 'events.hdf5'
            newhdf5 = 'hdf5_et_%s_%s.hdf5' %(expInfo['participant'],expInfo['date'])
            shutil.move(oldnhdf5, newhdf5)
    PolygonComponent dot1
      fillColor [set every repeat] = $dotColour
      stopVal [duration (s)] = 4
      pos [set every frame] = $d1pos
      lineWidth = 0
      startVal [time (s)] = 0.0
      nVertices = 90
      size = 40
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    PolygonComponent dot2
      fillColor [set every repeat] = $dotColour
      stopVal [duration (s)] = 4
      pos [set every frame] = d2pos
      lineWidth = 0
      startVal [time (s)] = 4
      nVertices = 90
      size = 40
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  Routine end
    TextComponent text_2
      color = black
      text = The End
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 40
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  Routine start
    TextComponent text
      text = Look at the dots.
      startVal [time (s)] = 0.0
      letterHeight = 50
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine start
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine pre
    Routine trial
  LoopTerminator trials
  Routine end
